OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Index
-> Temporal Filter => #2
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 49.9
  Band Pass Ripple (dB) = 0.5
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#2 -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream
  Stream type = EEG
Input stream=#2 -> CSV File Writer
  Filename = C:/Users/Svea Marie Meyer/Desktop/BCI-Friendship-Lamps/Raw/record-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
Signal=#2 -> GDF file writer
  Filename = C:/Users/Svea Marie Meyer/Desktop/BCI-Friendship-Lamps/Raw/svea_record-[$core{date}-$core{time}].gdf
